PsychoPy2experiment version="2022.2.5"
Settings
  Data filename = u'data/sub-%s_task-%s_%s' % (expInfo['participant'], expName, expInfo['date'])
  Experiment info = {'participant': '666', 'group': "['food','drug']", 'extra': '[0,1]', 'practice': '[1,0]', 'dorate': '[1,0]'}
  Full-screen window = True
  Monitor = testMonitor
  Resources = ['stimuli/food/1%milk.jpg', 'stimuli/food/AA026307.png', 'stimuli/food/AA026337.png', 'stimuli/food/AA026339.png', 'stimuli/food/AA026360.png', 'stimuli/food/air popcorn.jpg', 'stimuli/food/american cheese.jpg', 'stimuli/food/apple slices.jpg', 'stimuli/food/avacado.jpg', 'stimuli/food/baby cheese.jpg', 'stimuli/food/bagel and cc.jpg', 'stimuli/food/bagel plain.jpg', 'stimuli/food/baguette oil.jpg', 'stimuli/food/baked potato.jpg', 'stimuli/food/banana.jpg', 'stimuli/food/broccoli cauliflower.jpg', 'stimuli/food/brownie.jpg', 'stimuli/food/burger.jpg', 'stimuli/food/celery and carrot sticks.jpg', 'stimuli/food/Cheese nachos.jpg', 'stimuli/food/cherries.jpg', 'stimuli/food/cherry tomato.jpg', 'stimuli/food/chicken nuggets2.jpg', 'stimuli/food/cookies.jpg', 'stimuli/food/corn cob.jpg', 'stimuli/food/cucumber slices.jpg', 'stimuli/food/cupcakes am.jpg', 'stimuli/food/doughnuts.jpg', 'stimuli/food/eggs.jpg', 'stimuli/food/french fries.jpg', 'stimuli/food/fried eggs.jpg', 'stimuli/food/froot loops w milk.jpg', 'stimuli/food/granola w milk.jpg', 'stimuli/food/Grapes.jpg', 'stimuli/food/green beans.jpg', 'stimuli/food/grilled cheese.jpg', 'stimuli/food/grilled chicken strips.jpg', 'stimuli/food/Hershey Kisses.jpg', 'stimuli/food/hotdog w must.jpg', 'stimuli/food/ice cream sundae 002.jpg', 'stimuli/food/kiwi.jpg', 'stimuli/food/lollipops.jpg', 'stimuli/food/m_and_m.jpg', 'stimuli/food/mac & cheese.jpg', 'stimuli/food/mashed potato.jpg', 'stimuli/food/mini muffins.jpg', 'stimuli/food/mozarella sticks.jpg', 'stimuli/food/mushrooms.jpg', 'stimuli/food/orange slices.jpg', 'stimuli/food/PB.jpg', 'stimuli/food/peaches.jpg', 'stimuli/food/pickles.jpg', 'stimuli/food/pizza.jpg', 'stimuli/food/Pretzels.jpg', 'stimuli/food/raisin bran w milk.jpg', 'stimuli/food/raisins.jpg', 'stimuli/food/reeses.jpg', 'stimuli/food/rice cakes.jpg', 'stimuli/food/rigatoni and sauce.jpg', 'stimuli/food/rigatoni.jpg', 'stimuli/food/ritz.jpg', 'stimuli/food/salad w chicken.jpg', 'stimuli/food/saltines.jpg', 'stimuli/food/seaweed.jpg', 'stimuli/food/Skim milk.jpg', 'stimuli/food/soup with spoon.jpg', 'stimuli/food/sour patch.jpg', 'stimuli/food/soy chips.jpg', 'stimuli/food/steak.jpg', 'stimuli/food/strawberries.jpg', 'stimuli/food/string cheese.jpg', 'stimuli/food/sushi w_condiments.jpg', 'stimuli/food/tacos.jpg', 'stimuli/food/trail mix.jpg', 'stimuli/food/Tribe humus pita.jpg', 'stimuli/food/turkey sandwich.jpg', 'stimuli/food/Whole milk.jpg', 'stimuli/food/yellow popcorn.jpg', 'stimuli/food/yellow rice_beans.jpg', 'stimuli/food/yogurt no spoon.jpg', 'stimuli/food/yogurt pretzels.jpg', 'finalfooditems.csv', 'finalfooditems.xlsx', 'foodChoiceTrials.xlsx', 'stimuli/examples/shard-example_L1.png', 'stimuli/examples/shard-example_L2.png', 'stimuli/examples/shard-example_L3.png', 'stimuli/examples/shard-example_L4.png', 'stimuli/examples/shard-example_L5.png', 'stimuli/examples/shard-example_L6.png', 'stimuli/examples/shard-example_R1.png', 'stimuli/examples/shard-example_R2.png', 'stimuli/examples/shard-example_R3.png', 'stimuli/examples/shard-example_R4.png', 'stimuli/examples/shard-example_R5.png', 'stimuli/examples/shard-example_R6.png', 'practice.csv', 'training_trials.csv', 'trials.csv']
  Save csv file = True
  Screen = 1
  Units = height
  Use version = 2022.2.5
  Window size (pixels) = [1536, 960]
  color = -1.0000, -1.0000, -1.0000
  expName = crystals
  keyboardBackend = ioHub
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Routines
  Routine choice
    CodeComponent draw_chests
      Code Type = Auto->JS
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      Begin Experiment:
        left_chest = visual.ImageStim(
            win=win,
            name='left_chest',
            image='stimuli/chest.png', mask=None, anchor='center',
            ori=0.0, pos=(-.375, 0), size=(.6, .5),
            color=[1,1,1], colorSpace='rgb', opacity=None,
            flipHoriz=False, flipVert=False,
            texRes=128.0, interpolate=False, depth=-1.0)
        right_chest = visual.ImageStim(
            win=win,
            name='right_chest',
            image='stimuli/chest.png', mask=None, anchor='center',
            ori=0.0, pos=(.375, 0), size=(.6, .5),
            color=[1,1,1], colorSpace='rgb', opacity=None,
            flipHoriz=True, flipVert=False,
            texRes=128.0, interpolate=False, depth=-2.0)
      Begin Routine:
        left_chest.setAutoDraw(True)
        right_chest.setAutoDraw(True)
    CodeComponent fill_chests_2
      Code Type = Both
      Begin JS Routine:
        chest_order = ["Box1", "Box2"];
        util.shuffle(chest_order);

        let left_shard_shapes = Array.from({ length: 6 }, () =>
          Math.floor(Math.random() * 13) + 1
        );
        let right_shard_shapes = Array.from({ length: 6 }, () =>
          Math.floor(Math.random() * 13) + 1
        );
      Begin Routine:
        chest_order = np.random.permutation(['Box1','Box2'])
        #chest_order = ['Box1','Box2']
        #shuffle(chest_order)

        left_shard_shapes = np.random.choice([1,2,3,4,5,6,7,8,9,10,11,12,13], size=6, replace=True)
        right_shard_shapes = np.random.choice([1,2,3,4,5,6,7,8,9,10,11,12,13], size=6, replace=True)
        #left_shard_shapes = random.choices(range(1, 14), k=6)
        #right_shard_shapes = random.choices(range(1, 14), k=6)
        #left_shard_shapes = random_choices(range(1, 14))
        #right_shard_shapes = random_choices(range(1, 14))
    CodeComponent set_shards
      Code Type = Auto->JS
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      Begin Experiment:
        bonus_amt_pts = 20
        #all_shards_size = (.1175, .1175)
        #left_shards_pos = [[-.505, -.06225], [-.375, -.06225], [-.245, -.06225],
        #                   [-.505, -.17225], [-.375, -.17225], [-.245, -.17225]]
        #right_shards_pos = [[.505, -.06225], [.375, -.06225], [.245, -.06225],
        #                   [.505, -.17225], [.375, -.17225], [.245, -.17225]]
      Begin Routine:
        def reverse_value(num):
            if num == 1:
                return 12
            elif num == 2:
                return 11
            elif num == 3:
                return 10
            elif num == 4:
                return 9
            elif num == 5:
                return 8
            elif num == 6:
                return 7
            elif num == 7:
                return 6
            elif num == 8:
                return 5
            elif num == 9:
                return 4
            elif num == 10:
                return 3
            elif num == 11:
                return 2
            elif num == 12:
                return 1

        if chest_order[0] == 'Box1':
            if counter_balance == '1':
                left_shard_sum = str(Box1_Sum)
                right_shard_sum = str(Box2_Sum)

                left_shard_colors = [Box1_val1,Box1_val2,Box1_val3,
                                     Box1_val4,Box1_val5,Box1_val6]
                right_shard_colors = [Box2_val1,Box2_val2,Box2_val3,
                                      Box2_val4,Box2_val5,Box2_val6]

            elif counter_balance == '2':
                left_shard_sum = str(Box1_Sum)
                right_shard_sum = str(Box2_Sum)

                left_shard_colors = [reverse_value(Box1_val1),reverse_value(Box1_val2),reverse_value(Box1_val3),
                                     reverse_value(Box1_val4),reverse_value(Box1_val5),reverse_value(Box1_val6)]
                right_shard_colors = [reverse_value(Box2_val1),reverse_value(Box2_val2),reverse_value(Box2_val3),
                                      reverse_value(Box2_val4),reverse_value(Box2_val5),reverse_value(Box2_val6)]

        elif chest_order[0] == 'Box2':
            if counter_balance == '1':
                left_shard_sum = str(Box2_Sum)
                right_shard_sum = str(Box1_Sum)
                left_shard_colors = [Box2_val1,Box2_val2,Box2_val3,
                                      Box2_val4,Box2_val5,Box2_val6]
                right_shard_colors = [Box1_val1,Box1_val2,Box1_val3,
                                      Box1_val4,Box1_val5,Box1_val6]

            elif counter_balance == '2':
                left_shard_sum = str(Box2_Sum)
                right_shard_sum = str(Box1_Sum)

                left_shard_colors = [reverse_value(Box2_val1),reverse_value(Box2_val2),reverse_value(Box2_val3),
                                      reverse_value(Box2_val4),reverse_value(Box2_val5),reverse_value(Box2_val6)]
                right_shard_colors = [reverse_value(Box1_val1),reverse_value(Box1_val2),reverse_value(Box1_val3),
                                     reverse_value(Box1_val4),reverse_value(Box1_val5),reverse_value(Box1_val6)]

        left_shards = []
        right_shards = []
        for i in range(6):
            ## THIS PART CONVERTS TO JS USING [].PUSH
            if left_shard_shapes[i] >= 10:
                left_shards.append('stimuli/shard-' + str(left_shard_shapes[i]) + '_color-' + str(left_shard_colors[i]) + '.png')
            else:
                left_shards.append('stimuli/shard-0' + str(left_shard_shapes[i]) + '_color-' + str(left_shard_colors[i]) + '.png')

            ## THIS PART CONVERTS TO JS USING [].PUSH
            if right_shard_shapes[i] >= 10:
                right_shards.append('stimuli/shard-' + str(right_shard_shapes[i]) + '_color-' + str(right_shard_colors[i]) + '.png')
            else:
                right_shards.append('stimuli/shard-0' + str(right_shard_shapes[i]) + '_color-' + str(right_shard_colors[i]) + '.png')

        #left_shards = [f'stimuli/shard-{shape}_color-{color}.png' for shape, color in zip(left_shard_shapes, left_shard_colors)]
        #right_shards = [f'stimuli/shard-{shape}_color-{color}.png' for shape, color in zip(right_shard_shapes, right_shard_colors)]

        ## determine better option
        if float(left_shard_sum) > float(right_shard_sum):
            better_option = 'left'
        elif float(left_shard_sum) < float(right_shard_sum):
            better_option = 'right'

        thisExp.addData('better_option', better_option)

        if self_trials.thisTrialN == 81: # psuedorandomly selected trial
            if this_trial_choice == 'left':
                bonus_amt_pts = float(left_shard_sum)
            if this_trial_choice == 'right':
                bonus_amt_pts = float(right_shard_sum)

        #if chest_order[0] == 'Box1':
        #    left_box = 'Box1'
        #    thisExp.addData('left_box', left_box)
        #
        #    left_shard_colors = [Box1_val1,Box1_val2,Box1_val3,Box1_val4,Box1_val5,Box1_val6]
        #    left_shard_sum = str(Box1_Sum)
        #    right_shard_colors = [Box2_val1,Box2_val2,Box2_val3,
        #                          Box2_val4,Box2_val5,Box2_val6]
        #    right_shard_sum = str(Box2_Sum)
        #elif chest_order[0] == 'Box2':
        #    right_box = 'Box2'
        #    thisExp.addData('right_box', right_box)
        #    left_shard_colors = [Box2_val1,Box2_val2,Box2_val3,
        #                          Box2_val4,Box2_val5,Box2_val6]
        #    left_shard_sum = str(Box2_Sum)
        #    right_shard_colors = [Box1_val1,Box1_val2,Box1_val3,
        #                          Box1_val4,Box1_val5,Box1_val6]
        #    right_shard_sum = str(Box1_Sum)
    CodeComponent outline_settings
      Code Type = Auto->JS
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      End Routine:
        if choice_resp.keys == 'f': #left
            this_trial_choice = 'left'
            this_trial_box_choice = chest_order[0]

            if better_option == 'left':
                correct = 1
            else:
                correct = 0

            outline_shape.setPos((-.375, 0), log=True)
            outline_shape.setAutoDraw(True)
        elif choice_resp.keys == 'j': #right
            this_trial_choice = 'right'
            this_trial_box_choice = chest_order[1]

            if better_option == 'right':
                correct = 1
            else:
                correct = 0
            outline_shape.setAutoDraw(True)
            outline_shape.setPos((.375, 0), log=True)

        thisExp.addData('agent_choice', this_trial_choice)
        thisExp.addData('agent_box_choice', this_trial_box_choice)
        thisExp.addData('correct_choice', correct)
        correct_choice_count.append(correct)
    ImageComponent left_shard_5
      image [set every repeat] = $left_shards[5]
      pos = $left_shards_pos[5]
      saveStartStop = False
      size = $all_shards_size
      startVal [time (s)] = 0.0
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    ImageComponent right_shard_0
      image [set every repeat] = $right_shards[0]
      pos = $right_shards_pos[0]
      saveStartStop = False
      size = $all_shards_size
      startVal [time (s)] = 0.0
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    ImageComponent right_shard_1
      image [set every repeat] = $right_shards[1]
      pos = $right_shards_pos[1]
      saveStartStop = False
      size = $all_shards_size
      startVal [time (s)] = 0.0
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    ImageComponent right_shard_2
      image [set every repeat] = $right_shards[2]
      pos = $right_shards_pos[2]
      saveStartStop = False
      size = $all_shards_size
      startVal [time (s)] = 0.0
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    ImageComponent right_shard_3
      image [set every repeat] = $right_shards[3]
      pos = $right_shards_pos[3]
      saveStartStop = False
      size = $all_shards_size
      startVal [time (s)] = 0.0
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    ImageComponent right_shard_4
      image [set every repeat] = $right_shards[4]
      pos = $right_shards_pos[4]
      saveStartStop = False
      size = $all_shards_size
      startVal [time (s)] = 0.0
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    ImageComponent right_shard_5
      image [set every repeat] = $right_shards[5]
      pos = $right_shards_pos[5]
      saveStartStop = False
      size = $all_shards_size
      startVal [time (s)] = 0.0
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    KeyboardComponent choice_resp
      allowedKeys = 'f','j'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
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    CodeComponent get_bonus
      Code Type = Auto->JS
      disabled = True
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      End Routine:
        if TrialN == 81: # psuedorandomly selected trial
            if this_trial_choice == 'left':
                bonus_amt_pts = float(left_shard_sum)
            if this_trial_choice == 'right':
                bonus_amt_pts = float(right_shard_sum)
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  Routine start_exp
    CodeComponent code_JS
      Code Type = JS
      Begin JS Experiment:
        thisExp=psychoJS.experiment;
        win=psychoJS.window;
        event=psychoJS.eventManager;
        //random = Math.random;
        shuffle = util.shuffle;
        Array.prototype.append = [].push;
        //util.addInfoFromUrl(expInfo);
    CodeComponent hide_mouse
      Code Type = Both
      Begin JS Routine:
        //document.body.style.cursor='none';
      Begin Routine:
        myMouse = event.Mouse()
        myMouse.setPos(newPos=(1,1))

        win.mouseVisible = False
      End Experiment:
        win.mouseVisible = True
      End JS Experiment:
        //document.body.style.cursor='auto';
    CodeComponent check_bonus
      Code Type = Auto->JS
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      Begin Experiment:
        if expInfo['extra'] == '1':
            BONUS_BOOL = 1
        elif expInfo['extra'] == '0':
            BONUS_BOOL = 0

        participant_id = expInfo["participant"]
    CodeComponent reverse_opt
      Code Type = Auto->JS
      disabled = True
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      Begin Experiment:
        def reverse_value(num):
            if num == 1:
                return 12
            elif num == 2:
                return 11
            elif num == 3:
                return 10
            elif num == 4:
                return 9
            elif num == 5:
                return 8
            elif num == 6:
                return 7
            elif num == 7:
                return 6
            elif num == 8:
                return 5
            elif num == 9:
                return 4
            elif num == 10:
                return 3
            elif num == 11:
                return 2
            elif num == 12:
                return 1
    CodeComponent check_practice
      Code Type = Both
      Begin Experiment:
        from random import shuffle
      Begin JS Routine:
        if ((expInfo["practice"] === "1")) {
            PRACTICE_BOOL = 1;
        } else {
            if ((expInfo["practice"] === "0")) {
                PRACTICE_BOOL = 0;
            }
        }
      Begin Routine:
        if expInfo['practice'] == '1':
            PRACTICE_BOOL = 1
        elif expInfo['practice'] == '0':
            PRACTICE_BOOL = 0
    CodeComponent id_grab
      Code Type = Both
      disabled = True
      Before Experiment:
        subID = expInfo['participant']
      Before JS Experiment:
        var subID;
        const queryString = window.location.search;
        const urlParams = new URLSearchParams(queryString);
        subID = urlParams.get('participant'); //make sure this parameter is same as how you defined it in Prolific (aka case sensitive)
        expInfo['participant'] = subID;
        console.log(subID);
    CodeComponent check_stim
      Code Type = Auto->JS
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      Begin Experiment:
        if expInfo['group'] == 'food':
            FOOD_BOOL = 1
            foodDF = [];
            print('Food')
        else:
            FOOD_BOOL = 0
        if expInfo['group'] == 'drug':
            DRUG_BOOL = 1
            print('Drug')
        else:
            DRUG_BOOL = 0
    CodeComponent check_rate_js
      Code Type = JS
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      Begin JS Experiment:
        //foodDF = {"id": [], "image": [], "rating": [], "val_cat": [], "nrepeat": [], "rank": [], "whichItem": [], "diff": []};

        if ((expInfo["dorate"] === "1")) {
            RATE_BOOL = 1;
            console.log("Doing Ratings");
        } else {
            RATE_BOOL = 0;
            console.log("Not Doing Ratings");
        }

        if ( (RATE_BOOL === 0) & (FOOD_BOOL === 1) ){
            console.log("Generating Food Ratings");
            foodfile = "finalfooditems.csv";
            //foodListData = new data.TrialHandler2({"trialList": data.importConditions(foodfile), "nReps": 77, "method": "sequential", "extraInfo": expInfo});
            foodListData = new TrialHandler({
                psychoJS: psychoJS,
                nReps: 77, method: TrialHandler.Method.SEQUENTIAL,
                extraInfo: expInfo, originPath: undefined,
                trialList: foodfile,
                seed: undefined, name: 'foodListData'
            });

               function range(start, stop, step) {
                if (typeof stop == 'undefined') {
                    // one param defined
                    stop = start;
                    start = 0;
                }

                if (typeof step == 'undefined') {
                    step = 1;
                }

                if ((step > 0 && start >= stop) || (step < 0 && start <= stop)) {
                    return [];
                }

                var result = [];
                for (var i = start; step > 0 ? i < stop : i > stop; i += step) {
                    result.push(i);
                }

                return result;
            };

            foodTrialList = foodListData.trialList;
            foodlen = foodTrialList.length;
            console.log("There are ", foodlen," foods");
            food_ratings_df = {"id": [], "image": [], "rating": [], "val_cat": [], "nrepeat": []};
            num_rows = foodlen;
            for (var i, _pj_c = 0, _pj_a = range(foodlen), _pj_b = _pj_a.length; (_pj_c < _pj_b); _pj_c += 1) {
                i = _pj_a[_pj_c];
                food_ratings_df["id"].push((i + 1));
                food_ratings_df["image"].push(foodTrialList[i]);
                let rating = Math.round((Math.random() * 10) * 100) / 100;
                food_ratings_df["rating"].push(rating);
                if ((rating <= 3.33)) {
                    food_ratings_df["val_cat"].push("LV");
                } else {
                    if ((rating >= 6.67)) {
                        food_ratings_df["val_cat"].push("HV");
                    } else {
                        food_ratings_df["val_cat"].push("MV");
                    }
                }
                food_ratings_df["nrepeat"].push(0);
            };

          // console.log(food_ratings_df);
        }


        if ((RATE_BOOL === 0)) {
         // Separate foods based on value category
            let HVdf = [];
            let MVdf = [];
            let LVdf = [];

            for (var i = 0; i <= food_ratings_df.id.length; i++) {
            if (food_ratings_df.val_cat[i] === 'HV') {
                HVdf.push( {id: food_ratings_df.id[i], image: food_ratings_df.image[i], rating: food_ratings_df.rating[i], val_cat: food_ratings_df.val_cat[i], nrepeat: 0});
            } else if (food_ratings_df.val_cat[i] === 'MV') {
                MVdf.push( {id: food_ratings_df.id[i], image: food_ratings_df.image[i], rating: food_ratings_df.rating[i], val_cat: food_ratings_df.val_cat[i], nrepeat: 0});
            } else if (food_ratings_df.val_cat[i] === 'LV') {
                LVdf.push( {id: food_ratings_df.id[i], image: food_ratings_df.image[i], rating: food_ratings_df.rating[i], val_cat: food_ratings_df.val_cat[i], nrepeat: 0});
            }
            }

            // Ranking for foods
            HVdf.sort((a, b) => b.rating - a.rating);
            MVdf.sort((a, b) => b.rating - a.rating);
            LVdf.sort((a, b) => b.rating - a.rating);

            for (var i = 0; i < HVdf.length; i++) {
                HVdf[i].ranking = (i+1);
            }
            for (var i = 0; i < MVdf.length; i++) {
                MVdf[i].ranking = (i+1);
            }
            for (var i = 0; i < LVdf.length; i++) {
                LVdf[i].ranking = (i+1);
            }


            // Function to calculate the absolute difference between two values
            function absDiff(a, b) {
                return Math.abs(a - b);
            }

            // Function to find the intersection of two arrays
            function intersect(arr1, arr2) {
                return arr1.filter((value) => arr2.includes(value));
            }

            // Helper function to get a random integer within a range
            function getRandomInt(min, max) {
                return Math.floor(Math.random() * (max - min + 1) + min);
            }

            // Helper function for median
            function median(values){
                if(values.length ===0) throw new Error("No inputs");

                values.sort(function(a,b){
                return a-b;
                });

                var half = Math.floor(values.length / 2);

                if (values.length % 2)
                return values[half];

                return (values[half - 1] + values[half]) / 2.0;
            }

            // Other necessary variables
            // Implementation of the provided Python code in JavaScript

            var got_em = 0;
            var jitterHV = 0;
            var jitterMV = 0;
            var jitterLV = 0;
            var iteration = 0;


            while (got_em === 0) {
                if (iteration > 100) {
                    console.log("Too many tries")
                    break
                }

                // Protect jitter from going beyond the bounds of the median value
                var maxJitterHV = HVdf.length / 2;
                var maxJitterMV = MVdf.length / 2;
                var maxJitterLV = LVdf.length / 2;

                if (Math.abs(jitterHV) > maxJitterHV) {
                    jitterHV = getRandomInt(-maxJitterHV, maxJitterHV);
                }
                if (Math.abs(jitterMV) > maxJitterMV) {
                    jitterMV = getRandomInt(-maxJitterMV, maxJitterMV);
                }
                if (Math.abs(jitterLV) > maxJitterLV) {
                    jitterLV = getRandomInt(-maxJitterLV, maxJitterLV);
                }

                // Median trials
                var medianHV = HVdf.find((obj) => obj.ranking === Math.round(median(HVdf.map((obj) => obj.ranking)) + jitterHV));
                if (!medianHV) {
                    jitterHV += getRandomInt(-4, 4);
                    continue;
                }
                var medianMV = MVdf.find((obj) => obj.ranking === Math.round(median(MVdf.map((obj) => obj.ranking)) + jitterMV))
                if (!medianMV) {
                    jitterMV += getRandomInt(-4, 4);
                    continue;
                }
                var medianLV = LVdf.find((obj) => obj.ranking === Math.round(median(LVdf.map((obj) => obj.ranking)) + jitterLV))
                if (!medianLV) {
                    jitterLV += getRandomInt(-4, 4);
                    continue;
                }

                // Values of median trial
                var medHV = medianHV.rating;
                var medMV = medianMV.rating;
                var medLV = medianLV.rating;

                // Trials below/above median
                var lowerHV =  HVdf
                    .filter((obj) => obj.ranking > Math.round(median(HVdf.map((obj) => obj.ranking))))
                    .sort((a, b) => b - a);
                var upperHV =  HVdf
                    .filter((obj) => obj.ranking < Math.round(median(HVdf.map((obj) => obj.ranking))))
                    .sort((a, b) => b - a);
                var lowerMV = MVdf
                    .filter((obj) => obj.ranking > Math.round(median(MVdf.map((obj) => obj.ranking))))
                    .sort((a, b) => b - a);
                var upperMV = MVdf
                    .filter((obj) => obj.ranking < Math.round(median(MVdf.map((obj) => obj.ranking))))
                    .sort((a, b) => b - a);
                var lowerLV = LVdf
                    .filter((obj) => obj.ranking > Math.round(median(LVdf.map((obj) => obj.ranking))))
                    .sort((a, b) => b - a);
                var upperLV = LVdf
                    .filter((obj) => obj.ranking < Math.round(median(LVdf.map((obj) => obj.ranking))))
                    .sort((a, b) => b - a);

                // Subtract each value from the median to create a difference score for later matching
                // Round to nearest 0.2
                lowerHV.forEach(item => {
                    item.rat_diff = Math.ceil(Math.abs(item.rating - medHV) * 10) * 2 / 10;
                  });
                upperHV.forEach(item => {
                    item.rat_diff = Math.ceil(Math.abs(item.rating - medHV) * 10) * 2 / 10;
                  });

                lowerMV.forEach(item => {
                    item.rat_diff = Math.ceil(Math.abs(item.rating - medMV) * 10) * 2 / 10;
                  });
                upperMV.forEach(item => {
                    item.rat_diff = Math.ceil(Math.abs(item.rating - medMV) * 10) * 2 / 10;
                  });

                lowerLV.forEach(item => {
                    item.rat_diff = Math.ceil(Math.abs(item.rating - medLV) * 10) * 2 / 10;
                  });
                upperLV.forEach(item => {
                    item.rat_diff = Math.ceil(Math.abs(item.rating - medLV) * 10) * 2 / 10;
                  });

                // Find the intersection of VDs
                let intersect_value_HV = [];
                lowerHV.forEach(lowerItem => {
                    upperHV.forEach(upperItem => {
                    if (lowerItem.rat_diff === upperItem.rat_diff && lowerItem.rat_diff !== 0) {
                      intersect_value_HV.push({ lowerItem, upperItem });
                    }
                  });
                });

                let intersect_value_MV = [];
                lowerMV.forEach(lowerItem => {
                    upperMV.forEach(upperItem => {
                    if (lowerItem.rat_diff === upperItem.rat_diff && lowerItem.rat_diff !== 0) {
                        intersect_value_MV.push({ lowerItem, upperItem });
                    }
                    });
                });

                let intersect_value_LV = [];
                lowerLV.forEach(lowerItem => {
                    upperLV.forEach(upperItem => {
                    if (lowerItem.rat_diff === upperItem.rat_diff && lowerItem.rat_diff !== 0) {
                        intersect_value_LV.push({ lowerItem, upperItem });
                    }
                    });
                });

                if (intersect_value_HV.length === 0) {
                    jitterHV += getRandomInt(-4, 4);
                   continue;
                }
                if (intersect_value_MV.length === 0) {
                    jitterMV += getRandomInt(-4, 4);
                   continue;
                }
                if (intersect_value_LV.length === 0) {
                    jitterLV += getRandomInt(-4, 4);
                   continue;
                }

                // Find items with the same rat_diff from intersect_value_HV, intersect_value_MV, and intersect_value_LV
                let intersect_all = [];
                intersect_value_HV.forEach(itemHV => {
                    intersect_value_MV.forEach(itemMV => {
                        intersect_value_LV.forEach(itemLV => {
                            if (
                                itemHV.lowerItem.rat_diff === itemMV.lowerItem.rat_diff &&
                                itemHV.lowerItem.rat_diff === itemLV.lowerItem.rat_diff
                            ) {
                                intersect_all.push({
                                HV: itemHV,
                                MV: itemMV,
                                LV: itemLV
                            });
                            }
                        });
                    });
                });

                if (intersect_all.length === 0) {
                    var jitt_r = getRandomInt(1, 3);
                    if (jitt_r === 1) {
                        jitterLV += getRandomInt(-4, 4);
                        continue;
                    } else if (jitt_r === 2) {
                        jitterMV += getRandomInt(-4, 4);
                        continue;
                    } else {
                        jitterHV += getRandomInt(-4, 4);
                        continue;
                    }
                }

                // High-Value
                // Lower
                var lowerHVFood = intersect_all[0].HV.lowerItem
                // Upper
                var upperHVFood = intersect_all[0].HV.upperItem


                // Middle-Value
                // Lower
                var lowerMVFood = intersect_all[0].MV.lowerItem
                // Upper
                var upperMVFood = intersect_all[0].MV.upperItem

                // Low-Value
                // Lower
                var lowerLVFood = intersect_all[0].LV.lowerItem
                // Upper
                var upperLVFood = intersect_all[0].LV.upperItem

                // Assign 'whichItem' values
                upperHVFood['whichItem'] = 'HV1';
                upperMVFood['whichItem'] = 'MV1';
                upperLVFood['whichItem'] = 'LV1';
                medianHV['whichItem'] = 'HV2';
                medianMV['whichItem'] = 'MV2';
                medianLV['whichItem'] = 'LV2';
                lowerHVFood['whichItem'] = 'HV3';
                lowerMVFood['whichItem'] = 'MV3';
                lowerLVFood['whichItem'] = 'LV3';

                // Assign values to associate with rainbow
                lowerLVFood['val'] = 1;
                medianLV['val'] = 2;
                upperLVFood['val'] = 3;
                lowerMVFood['val'] = 4;
                medianMV['val'] = 5;
                upperMVFood['val'] = 6;
                lowerHVFood['val'] = 7;
                medianHV['val'] = 8;
                upperHVFood['val'] = 9;

                // Concatenate data to the foodDF array (assuming it is an array of objects)
                foodDF.push(medianHV);
                foodDF.push(medianMV);
                foodDF.push(medianLV);
                foodDF.push(lowerHVFood);
                foodDF.push(lowerMVFood);
                foodDF.push(lowerLVFood);
                foodDF.push(upperHVFood);
                foodDF.push(upperMVFood);
                foodDF.push(upperLVFood);

                if (foodDF.length === 9) {
                got_em = 1;
                }
            }

            console.log("These are the foods we'll use",foodDF);

        }
    CodeComponent check_rate_py
      Code Type = Auto->JS
      disabled = True
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      Begin Experiment:
        foodDF = {"id": [], "image": [], "rating": [], "val_cat": [], "nrepeat": [], "rank": [], "whichItem": [], "diff": []};
        if expInfo["dorate"] == "1":
            RATE_BOOL = 1;
            print("Doing Ratings");
        else:
            RATE_BOOL = 0;
            print("Not Doing Ratings");
      Begin Routine:
        if RATE_BOOL == 0:
            print("Generating Food Ratings")
            foodfile = 'finalfooditems.csv'

            foodListData = data.TrialHandler2(trialList= data.importConditions(foodfile), nReps = 77, method='sequential', extraInfo= expInfo)
            foodTrialList = foodListData.trialList

            foodlen = len(foodTrialList)
            #print('Number of foods: ' + str(foodlen))

            foodList = []
            foods = {}
            for i in range(foodlen):
                #print(foodList[i]['image'])
                foodList.append(foodTrialList[i]['image'])

            foods['image'] = foodList

            import numpy as np

            food_ratings_df = {"id": [], "image": [], "rating": [], "val_cat": [], "nrepeat": []}
            num_rows = foodlen
            for i in range(foodlen):
                food_ratings_df["id"].append((i + 1))
                food_ratings_df["image"].append(foods['image'][i])
                rating = round(np.random.randint(low=1,high=10), 2)
                #rating = Math.round((Math.random() * 11), 2)
                food_ratings_df["rating"].append(rating)
                if rating <= 3.33:
                    food_ratings_df["val_cat"].append("LV")
                elif rating >= 6.67:
                    food_ratings_df["val_cat"].append("HV")
                else:
                    food_ratings_df["val_cat"].append("MV")
                food_ratings_df["nrepeat"].append(0)

            print(food_ratings_df)
  Routine prac_instr
    TextComponent text_3
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        You’ve completed the training phase. Before we start the experiment, let's try a few final practice rounds.

        Select the better of the two treasure chests, and we will show you how many points you would be awarded for your choice.

        When you are ready, press the SPACE BAR to begin.
    KeyboardComponent key_resp_3
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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
  Routine self_instr
    CodeComponent start_task_txt
      Code Type = Auto->JS
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      Begin Routine:
        if BONUS_BOOL == 1:
            start_task_txt_disp = 'You are now ready to begin the experiment. In this portion of the study, you will no longer be shown how much each treasure chest is worth. Remember, your bonus payment will depend on your choices in this phase. At the end of the experiment, one random round will be selected, and you will get points for whichever option you chose.\n\nWhen you are ready, press the SPACE BAR to continue.'
        else:
            start_task_txt_disp = 'You are now ready to begin the experiment. In this portion of the study, you will no longer be shown how much each treasure chest is worth.\n\nWhen you are ready, press the SPACE BAR to continue.'
    TextComponent text_4
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $start_task_txt_disp
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    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine ender
    CodeComponent set_end_txt
      Code Type = Auto->JS
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      Begin Routine:
        if BONUS_BOOL == 1:
            ender_txt_disp = 'Congratulations - you have completed the experiment!\n\nPress the SPACE BAR to see your reward.'
        else:
            ender_txt_disp = 'Congratulations - you have completed the experiment!\n\nPress the SPACE BAR to exit.'
    TextComponent text_5
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $ender_txt_disp
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    KeyboardComponent key_resp_4
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine reward
    CodeComponent bonus_txt
      Code Type = Auto->JS
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      Begin Routine:
        bonus_amt_money = .25 * bonus_amt_pts
        bonus_txt_disp = f'On this round, the option you chose was worth {bonus_amt_pts} points. At a conversion rate of 25 cents for every point, you will receive a total of {bonus_amt_money:.02f} dollars.\n\nPress the SPACE BAR to exit.'
    TextComponent text_6
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $bonus_txt_disp
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    KeyboardComponent key_resp_5
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine colorblindness
    TextComponent colorblind_txt
      letterHeight = 0.04
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Do you have full color vision?

        Press 'Y' for yes and 'N' for no.
    KeyboardComponent full_color_vision
      allowedKeys = 'y','n'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
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
  Routine rateFood
    CodeComponent cycleFood
      Code Type = JS
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      Begin JS Routine:
        thisFood = image;
      Each JS Frame:
        if ((food_slider.rating === null)) {
            rating_value = 0;
        } else {
            rating_value = Math.round((food_slider.getRating() / 10), 2);
        }
    SliderComponent food_slider
      forceEndRoutine = False
      granularity = .1
      labels = (1, 2, 3, 4, 5, 6, 7, 8, 9, 10)
      letterHeight = 0.05
      pos = (0, -0.175)
      saveStartStop = False
      size = (1.0, 0.05)
      startVal [time (s)] = 0.0
      styles = rating
      ticks = (1, 2, 3, 4, 5, 6, 7, 8, 9, 10)
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    ImageComponent foodImage
      image [set every repeat] = $thisFood
      pos = (0, 0.15)
      size = (0.4, 0.4)
      startVal [time (s)] = 0.0
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    TextComponent slider_value
      disabled = True
      letterHeight = 0.05
      pos = (0, -0.075)
      startVal [condition] = food_slider.rating!=None
      text [set every frame] = $rating_value
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    ButtonComponent next_button
      bold = True
      forceEndRoutine = True
      letterHeight = 0.03
      pos = (0, -0.4)
      size = [0.5, 0.13]
      startVal [condition] = $food_slider.rating!=null
      text = Press Spacebar To Continue
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    KeyboardComponent check_space_key
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [condition] = $food_slider.rating!=null
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    CodeComponent filterFood
      Code Type = JS
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      Begin JS Experiment:
        if ((RATE_BOOL !== "0")) {
            food_ratings_df = {"id": [], "image": [], "rating": [], "val_cat": [], "nrepeat": []};
        }
      Each JS Frame:
        food_ratings_df["id"].push(food_ratings_df["id"].length + 1);
        food_ratings_df["image"].push(thisFood);
        food_ratings_df["rating"].push(Math.round(food_slider.getRating()/10,2));

        if (food_slider.getRating()/10 <= 3.33) {
            food_ratings_df["val_cat"].push("LV");
        } else if (food_slider.getRating()/10 >= 6.67) {
            food_ratings_df["val_cat"].push("HV");
        } else {
            food_ratings_df["val_cat"].push("MV");
        }

        food_ratings_df["nrepeat"].push(0);
      End JS Experiment:
        file_str = (("food_ratings_" + expInfo["participant"].toString()) + ".csv");
  Routine fixation_500ms
    TextComponent text
      letterHeight = 0.075
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      text = +
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
  Routine start_food_ratings
    KeyboardComponent start_food_rat_key
      allowedKeys = 'right'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent start_food_rat_text
      letterHeight = 0.04
      startVal [time (s)] = 0
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      text:
        You will now view a series of food images. Using the mouse, please indicate how much you would like to consume food in each image, on a scale from 1 ("Not at al") to 10 ("Very much").

        Press the RIGHT ARROW to start.
    CodeComponent show_mouse
      Code Type = Auto->JS
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      End Routine:
        win.mouseVisible = True
  Routine hide_mouse_routine
    CodeComponent code_2
      Code Type = Auto->JS
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      Begin Routine:
        win.mouseVisible = False
  Routine sort_food
    CodeComponent sort_food_df_js
      Code Type = JS
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      Begin JS Routine:
        // Separate foods based on value category
        let HVdf = [];
        let MVdf = [];
        let LVdf = [];

        for (var i = 0; i <= food_ratings_df.id.length; i++) {
        if (food_ratings_df.val_cat[i] === 'HV') {
            HVdf.push( {id: food_ratings_df.id[i], image: food_ratings_df.image[i], rating: food_ratings_df.rating[i], val_cat: food_ratings_df.val_cat[i], nrepeat: 0});
        } else if (food_ratings_df.val_cat[i] === 'MV') {
            MVdf.push( {id: food_ratings_df.id[i], image: food_ratings_df.image[i], rating: food_ratings_df.rating[i], val_cat: food_ratings_df.val_cat[i], nrepeat: 0});
        } else if (food_ratings_df.val_cat[i] === 'LV') {
            LVdf.push( {id: food_ratings_df.id[i], image: food_ratings_df.image[i], rating: food_ratings_df.rating[i], val_cat: food_ratings_df.val_cat[i], nrepeat: 0});
        }
        }

        // Ranking for foods
        HVdf.sort((a, b) => b.rating - a.rating);
        MVdf.sort((a, b) => b.rating - a.rating);
        LVdf.sort((a, b) => b.rating - a.rating);

        for (var i = 0; i < HVdf.length; i++) {
            HVdf[i].ranking = (i+1);
        }
        for (var i = 0; i < MVdf.length; i++) {
            MVdf[i].ranking = (i+1);
        }
        for (var i = 0; i < LVdf.length; i++) {
            LVdf[i].ranking = (i+1);
        }


        // Function to calculate the absolute difference between two values
        function absDiff(a, b) {
            return Math.abs(a - b);
        }

        // Function to find the intersection of two arrays
        function intersect(arr1, arr2) {
            return arr1.filter((value) => arr2.includes(value));
        }

        // Helper function to get a random integer within a range
        function getRandomInt(min, max) {
            return Math.floor(Math.random() * (max - min + 1) + min);
        }

        // Helper function for median
        function median(values){
            if(values.length ===0) throw new Error("No inputs");

            values.sort(function(a,b){
            return a-b;
            });

            var half = Math.floor(values.length / 2);

            if (values.length % 2)
            return values[half];

            return (values[half - 1] + values[half]) / 2.0;
        }

        // Other necessary variables
        var got_em = 0;
        var jitterHV = 0;
        var jitterMV = 0;
        var jitterLV = 0;
        var iteration = 0;


        while (got_em === 0) {
            if (iteration > 100) {
                console.log("Too many tries")
                break
            }

            // Protect jitter from going beyond the bounds of the median value
            var maxJitterHV = HVdf.length / 2;
            var maxJitterMV = MVdf.length / 2;
            var maxJitterLV = LVdf.length / 2;

            if (Math.abs(jitterHV) > maxJitterHV) {
                jitterHV = getRandomInt(-maxJitterHV, maxJitterHV);
            }
            if (Math.abs(jitterMV) > maxJitterMV) {
                jitterMV = getRandomInt(-maxJitterMV, maxJitterMV);
            }
            if (Math.abs(jitterLV) > maxJitterLV) {
                jitterLV = getRandomInt(-maxJitterLV, maxJitterLV);
            }

            // Median trials
            var medianHV = HVdf.find((obj) => obj.ranking === Math.round(median(HVdf.map((obj) => obj.ranking)) + jitterHV));
            if (!medianHV) {
                jitterHV += getRandomInt(-4, 4);
                continue;
            }
            var medianMV = MVdf.find((obj) => obj.ranking === Math.round(median(MVdf.map((obj) => obj.ranking)) + jitterMV))
            if (!medianMV) {
                jitterMV += getRandomInt(-4, 4);
                continue;
            }
            var medianLV = LVdf.find((obj) => obj.ranking === Math.round(median(LVdf.map((obj) => obj.ranking)) + jitterLV))
            if (!medianLV) {
                jitterLV += getRandomInt(-4, 4);
                continue;
            }

            // Values of median trial
            var medHV = medianHV.rating;
            var medMV = medianMV.rating;
            var medLV = medianLV.rating;

            // Trials below/above median
            var lowerHV =  HVdf
                .filter((obj) => obj.ranking > Math.round(median(HVdf.map((obj) => obj.ranking))))
                .sort((a, b) => b - a);
            var upperHV =  HVdf
                .filter((obj) => obj.ranking < Math.round(median(HVdf.map((obj) => obj.ranking))))
                .sort((a, b) => b - a);
            var lowerMV = MVdf
                .filter((obj) => obj.ranking > Math.round(median(MVdf.map((obj) => obj.ranking))))
                .sort((a, b) => b - a);
            var upperMV = MVdf
                .filter((obj) => obj.ranking < Math.round(median(MVdf.map((obj) => obj.ranking))))
                .sort((a, b) => b - a);
            var lowerLV = LVdf
                .filter((obj) => obj.ranking > Math.round(median(LVdf.map((obj) => obj.ranking))))
                .sort((a, b) => b - a);
            var upperLV = LVdf
                .filter((obj) => obj.ranking < Math.round(median(LVdf.map((obj) => obj.ranking))))
                .sort((a, b) => b - a);

            // Subtract each value from the median to create a difference score for later matching
            // Round to nearest 0.2
            lowerHV.forEach(item => {
                item.rat_diff = Math.ceil(Math.abs(item.rating - medHV) * 10) * 2 / 10;
              });
            upperHV.forEach(item => {
                item.rat_diff = Math.ceil(Math.abs(item.rating - medHV) * 10) * 2 / 10;
              });

            lowerMV.forEach(item => {
                item.rat_diff = Math.ceil(Math.abs(item.rating - medMV) * 10) * 2 / 10;
              });
            upperMV.forEach(item => {
                item.rat_diff = Math.ceil(Math.abs(item.rating - medMV) * 10) * 2 / 10;
              });

            lowerLV.forEach(item => {
                item.rat_diff = Math.ceil(Math.abs(item.rating - medLV) * 10) * 2 / 10;
              });
            upperLV.forEach(item => {
                item.rat_diff = Math.ceil(Math.abs(item.rating - medLV) * 10) * 2 / 10;
              });

            // Find the intersection of VDs
            let intersect_value_HV = [];
            lowerHV.forEach(lowerItem => {
                upperHV.forEach(upperItem => {
                if (lowerItem.rat_diff === upperItem.rat_diff && lowerItem.rat_diff !== 0) {
                  intersect_value_HV.push({ lowerItem, upperItem });
                }
              });
            });

            let intersect_value_MV = [];
            lowerMV.forEach(lowerItem => {
                upperMV.forEach(upperItem => {
                if (lowerItem.rat_diff === upperItem.rat_diff && lowerItem.rat_diff !== 0) {
                    intersect_value_MV.push({ lowerItem, upperItem });
                }
                });
            });

            let intersect_value_LV = [];
            lowerLV.forEach(lowerItem => {
                upperLV.forEach(upperItem => {
                if (lowerItem.rat_diff === upperItem.rat_diff && lowerItem.rat_diff !== 0) {
                    intersect_value_LV.push({ lowerItem, upperItem });
                }
                });
            });

            if (intersect_value_HV.length === 0) {
                jitterHV += getRandomInt(-4, 4);
               continue;
            }
            if (intersect_value_MV.length === 0) {
                jitterMV += getRandomInt(-4, 4);
               continue;
            }
            if (intersect_value_LV.length === 0) {
                jitterLV += getRandomInt(-4, 4);
               continue;
            }

            // Find items with the same rat_diff from intersect_value_HV, intersect_value_MV, and intersect_value_LV
            let intersect_all = [];
            intersect_value_HV.forEach(itemHV => {
                intersect_value_MV.forEach(itemMV => {
                    intersect_value_LV.forEach(itemLV => {
                        if (
                            itemHV.lowerItem.rat_diff === itemMV.lowerItem.rat_diff &&
                            itemHV.lowerItem.rat_diff === itemLV.lowerItem.rat_diff
                        ) {
                            intersect_all.push({
                            HV: itemHV,
                            MV: itemMV,
                            LV: itemLV
                        });
                        }
                    });
                });
            });

            if (intersect_all.length === 0) {
                var jitt_r = getRandomInt(1, 3);
                if (jitt_r === 1) {
                    jitterLV += getRandomInt(-4, 4);
                    continue;
                } else if (jitt_r === 2) {
                    jitterMV += getRandomInt(-4, 4);
                    continue;
                } else {
                    jitterHV += getRandomInt(-4, 4);
                    continue;
                }
            }

            // High-Value
            // Lower
            var lowerHVFood = intersect_all[0].HV.lowerItem
            // Upper
            var upperHVFood = intersect_all[0].HV.upperItem


            // Middle-Value
            // Lower
            var lowerMVFood = intersect_all[0].MV.lowerItem
            // Upper
            var upperMVFood = intersect_all[0].MV.upperItem

            // Low-Value
            // Lower
            var lowerLVFood = intersect_all[0].LV.lowerItem
            // Upper
            var upperLVFood = intersect_all[0].LV.upperItem

            // Assign 'whichItem' values
            upperHVFood['whichItem'] = 'HV1';
            upperMVFood['whichItem'] = 'MV1';
            upperLVFood['whichItem'] = 'LV1';
            medianHV['whichItem'] = 'HV2';
            medianMV['whichItem'] = 'MV2';
            medianLV['whichItem'] = 'LV2';
            lowerHVFood['whichItem'] = 'HV3';
            lowerMVFood['whichItem'] = 'MV3';
            lowerLVFood['whichItem'] = 'LV3';

            // Assign values to associate with rainbow
            lowerLVFood['val'] = 1;
            medianLV['val'] = 2;
            upperLVFood['val'] = 3;
            lowerMVFood['val'] = 4;
            medianMV['val'] = 5;
            upperMVFood['val'] = 6;
            lowerHVFood['val'] = 7;
            medianHV['val'] = 8;
            upperHVFood['val'] = 9;


            // Concatenate data to the foodDF array (assuming it is an array of objects)
            foodDF.push(medianHV);
            foodDF.push(medianMV);
            foodDF.push(medianLV);
            foodDF.push(lowerHVFood);
            foodDF.push(lowerMVFood);
            foodDF.push(lowerLVFood);
            foodDF.push(upperHVFood);
            foodDF.push(upperMVFood);
            foodDF.push(upperLVFood);

            if (foodDF.length === 9) {
            got_em = 1;
            }
        }

        console.log(foodDF);
  Routine choose_food
    CodeComponent select_food_image
      Code Type = JS
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      Begin JS Experiment:
        var thisImage = [];
      Begin JS Routine:
        thisImage_obj = foodDF
            .filter((obj) => obj.whichItem === whichItem)

        thisImage_obj2 = thisImage_obj[0].image;
        thisImage = thisImage_obj2.image;
        //console.log(thisImage);
    ImageComponent food_img_choice
      image [set every repeat] = $thisImage
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.75
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  Routine instr_1
    CodeComponent instr_dict
      Code Type = Auto->JS
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      Begin Experiment:
        nrounds = 150
      Begin Routine:
        instr_back_txt = visual.TextStim(win=win, name='back_forth',
            text='',
            font='Arial',
            pos=(0, -.4), height=0.05, wrapWidth=None, ori=0,
            color='white', colorSpace='rgb', opacity=1,
            languageStyle='LTR',
            depth=0.0);

        instr_back_txt.text = '\nPress RIGHT ARROW to continue.'
        instr_back_txt.autoDraw = True
        #win.flip()

        # 1 - Display treasure chests
        # 5 - Display rainbow

        if BONUS_BOOL == 1:
            instr_strs = {}
            instr_strs[0] = f'Today, your task will be to make a series of choices between two treasure chests. Each chest will contain a variety of crystals inside.\n\nFor your participation today, you will gain a bonus based on your choices.'
            instr_strs[1] = f'Here are two diffferent treasure chest examples\n\n\n\n\n\n\n\n\n\n\n\n\n'
            instr_strs[2] = f'Over {nrounds} rounds, you will be choosing the better of two treasure chests. The value of each treasure chest is simply the sum of the values of each crystal in the chest. The crystals are each worth a different number of points depending on their color, and each color is equally likely to appear. In this task, every point is worth {conversion_rate*100} cents. In order to know the value of a treasure chest, you will first need to learn what each color is worth.\n\n\n'
            instr_strs[3] = f'The following screen will display the colors you will see throughout this task.'
            instr_strs[4] = f'The value of the colors increases across the spectrum, from left to right.\n\n\n\n\n\n\n\n\n\n\n\n\n\n'
        else:
            instr_strs = {}
            instr_strs[0] = f'Today, your task will be to mine for treasure chests. Each chest will contain a variety of crystals inside, representing different types of rewards.\n\n\n'
            instr_strs[1] = f'Here are two diffferent treasure chest examples\n\n\n\n\n\n\n\n\n\n\n\n\n'
            if FOOD_BOOL == 1:
                instr_strs[2] = f'Different crystals can be exchanged for different types of rewards. Some crystals can be exchanged for images of food, while others can be exchanged for images of social gatherings.\n\n\n\n\n\n\n\n'
            else:
                instr_strs[2] = f'Different crystals can be exchanged for different types of rewards. Some crystals can be exchanged for images of drugs, while others can be exchanged for images of social gatherings.\n\n\n\n\n\n\n\n'
            instr_strs[3] = f'Before you start learning about the crystals, you will first rate a series of images. This will ensure that the rewards are tailored to your specific preferences.'

        instr_disp_txt = visual.TextStim(win=win, name='instructions',
            text='',
            font='Arial',
            pos=(0, 0), height=0.04, wrapWidth=None, ori=0,
            color='white', colorSpace='rgb', opacity=1,
            languageStyle='LTR',
            depth=0.0);
        instr_disp_txt.text = instr_strs[0]
        instr_disp_txt.autoDraw = True

        curr_instr = 0
      Each Frame:
        instr_keys = event.getKeys()

        if curr_instr == 0:
            instr_back_txt.text = '\nPress RIGHT ARROW to continue.'

            if 'right' in instr_keys:
                instr_keyboard.clearEvents()
                curr_instr += 1
                instr_disp_txt.text = instr_strs[curr_instr]
                instr_back_txt.autoDraw = True
        #        win.flip()
        elif curr_instr == 3: #Last slide
            instr_back_txt.text = 'Press LEFT ARROW to go back.\nPress RIGHT ARROW to begin.'
            if 'right' in instr_keys:
                instr_keyboard.clearEvents()
                continueRoutine = False
            elif 'left' in instr_keys:
                instr_keyboard.clearEvents()
                curr_instr -= 1
                instr_disp_txt.text = instr_strs[curr_instr]

                # if prev instr == 0, then remove left arrow as option
                if curr_instr == 0:
                    instr_back_txt.autoDraw = False
                else:
                    instr_back_txt.autoDraw = True
        else:
            if curr_instr == 2:
                #social_image.setAutoDraw(True)
                if FOOD_BOOL == 1:
                    food_image_1.setAutoDraw(True)
                    food_image_2.setAutoDraw(True)
                else:
                    drug_image.setAutoDraw(True)

            instr_back_txt.text = 'Press LEFT ARROW to go back.\nPress RIGHT ARROW to continue.'
            if 'right' in instr_keys:
                social_image.setAutoDraw(False)
                food_image_1.setAutoDraw(False)
                food_image_2.setAutoDraw(False)
                drug_image.setAutoDraw(False)

                instr_keyboard.clearEvents()
                curr_instr += 1
                instr_disp_txt.text = instr_strs[curr_instr]
                instr_back_txt.autoDraw = True
        #        win.flip()
            elif 'left' in instr_keys:

                social_image.setAutoDraw(False)
                food_image_1.setAutoDraw(False)
                food_image_2.setAutoDraw(False)
                drug_image.setAutoDraw(False)

                instr_keyboard.clearEvents()
                curr_instr -= 1
                instr_disp_txt.text = instr_strs[curr_instr]

                # if prev instr == 0, then remove left arrow as option
                if curr_instr == 0:
                    instr_back_txt.text = '\nPress RIGHT ARROW to continue.'
                else:
                    instr_back_txt.text = 'Press LEFT ARROW to go back.\nPress RIGHT ARROW to continue.'

        #        win.flip()
      End Routine:
        instr_back_txt.autoDraw = False
        instr_disp_txt.autoDraw = False
    KeyboardComponent instr_keyboard
      allowedKeys = 'left','right'
      forceEndRoutine = False
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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    CodeComponent set_ex_images
      Code Type = Auto->JS
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      Begin Experiment:
        food_image_1 = visual.ImageStim(
            win=win,
            name='food_image',
            image='stimuli/food/AA026307.png', mask=None, anchor='center',
            ori=0.0, pos=(-.300, -.1), size=(1, 1),
            color=[1,1,1], colorSpace='rgb', opacity=None,
            flipHoriz=False, flipVert=False,
            texRes=128.0, interpolate=False, depth=-1.0)
        food_image_2 = visual.ImageStim(
            win=win,
            name='food_image',
            image='stimuli/food/AA026339.png', mask=None, anchor='center',
            ori=0.0, pos=(.300, -.1), size=(1, 1),
            color=[1,1,1], colorSpace='rgb', opacity=None,
            flipHoriz=False, flipVert=False,
            texRes=128.0, interpolate=False, depth=-1.0)
        drug_image = visual.ImageStim(
            win=win,
            name='drug_image',
            image='stimuli/food/AA026307.png', mask=None, anchor='center',
            ori=0.0, pos=(-.300, -.1), size=(.25, .25),
            color=[1,1,1], colorSpace='rgb', opacity=None,
            flipHoriz=False, flipVert=False,
            texRes=128.0, interpolate=False, depth=-1.0)
        social_image = visual.ImageStim(
            win=win,
            name='social_image',
            image='stimuli/food/AA026307.png', mask=None, anchor='center',
            ori=0.0, pos=(.300, -.1), size=(.25, .25),
            color=[1,1,1], colorSpace='rgb', opacity=None,
            flipHoriz=True, flipVert=False,
            texRes=128.0, interpolate=False, depth=-2.0)
  Routine instr_2
    CodeComponent instr_dict_2
      Code Type = Auto->JS
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      Begin Experiment:
        days = 10
        rounds = 15
      Begin Routine:
        instr_back_txt = visual.TextStim(win=win, name='back_forth',
            text='',
            font='Arial',
            pos=(0, -.4), height=0.05, wrapWidth=None, ori=0,
            color='white', colorSpace='rgb', opacity=1,
            languageStyle='LTR',
            depth=0.0);

        instr_back_txt.text = '\nPress RIGHT ARROW to continue.'
        instr_back_txt.autoDraw = True
        #win.flip()

        # 1 - Display treasure chests
        # 5 - Display rainbow


        instr_strs = {}
        instr_strs[0] = f'You have completed the rating phase.\nIn this next phase, you will learn more about how the mining task works.'
        instr_strs[1] = f'In this task, you are playing the role of a miner. It is up to you to select where you will mine for crystals and which crystals you want to keep.'
        instr_strs[2] = f'Over {days} days, you will be choosing which cave you want to work in. Once you are in a cave, you will be presented with a series of chests containg crystals. The value of these chests depend on the type of crystals inside. Each crystal is worth a different reward, depending on its color.'
        if FOOD_BOOL == 1:
            instr_strs[3] = f'Each day, after selecting a cave, you will make {rounds} choices between two chests. Some times those chests will contain crystals that give you food rewards, but other times they will give you social rewards.'
        else:
            instr_strs[3] = f'Each day, after selecting a cave, you will make {rounds} choices between two chests. Some times those chests will contain crystals that give you drug rewards, but other times they will give you social rewards.'
        instr_strs[4] = f'To get the type of rewards you want, you will need to learn both which mine is more likely to have the right crystals, and which crystals give you the best reward.';
        instr_strs[5] = f'The following screen will display the colors you will see throughout this task.'
        instr_strs[6] = f'Each rainbow offers a different type of reward. The value of the colors increases across the spectrum, from left to right.\n\n\n\n\n\n\n\n\n\n\n\n\n\n'

        instr_disp_txt = visual.TextStim(win=win, name='instructions',
            text='',
            font='Arial',
            pos=(0, 0), height=0.04, wrapWidth=None, ori=0,
            color='white', colorSpace='rgb', opacity=1,
            languageStyle='LTR',
            depth=0.0);
        instr_disp_txt.text = instr_strs[0]
        instr_disp_txt.autoDraw = True

        curr_instr = 0
      Each Frame:
        instr_keys = event.getKeys()

        if curr_instr == 0:
            instr_back_txt.text = '\nPress RIGHT ARROW to continue.'

            if 'right' in instr_keys:
                instr_keyboard.clearEvents()
                curr_instr += 1
                instr_disp_txt.text = instr_strs[curr_instr]
                instr_back_txt.autoDraw = True
        #        win.flip()
        elif curr_instr == 6: #rainbow
            for swatch_index in range(len(color_scale1)):
                swatches_top[swatch_index].setAutoDraw(True)
                swatches_bot[swatch_index].setAutoDraw(True)

            instr_back_txt.text = 'Press LEFT ARROW to go back.\nPress RIGHT ARROW to begin.'
            if 'right' in instr_keys:
                for swatch_index in range(len(color_scale1)):
                    swatches_top[swatch_index].setAutoDraw(False)
                    swatches_bot[swatch_index].setAutoDraw(False)

                instr_keyboard.clearEvents()
                continueRoutine = False
            elif 'left' in instr_keys:
                for swatch_index in range(len(color_scale_1)):
                    swatches_top[swatch_index].setAutoDraw(False)
                    swatches_bot[swatch_index].setAutoDraw(False)

                instr_keyboard.clearEvents()
                curr_instr -= 1
                instr_disp_txt.text = instr_strs[curr_instr]

                # if prev instr == 0, then remove left arrow as option
                if curr_instr == 0:
                    instr_back_txt.autoDraw = False
                else:
                    instr_back_txt.autoDraw = True

        #        win.flip()
        else:
            if curr_instr == 11: #draw shards
                left_chest.setAutoDraw(True)
                left_shard.setAutoDraw(True)
                left_shard_6.setAutoDraw(True)
                left_shard_7.setAutoDraw(True)
                left_shard_8.setAutoDraw(True)
                left_shard_9.setAutoDraw(True)
                left_shard_10.setAutoDraw(True)

                right_chest.setAutoDraw(True)
                right_shard.setAutoDraw(True)
                right_shard_6.setAutoDraw(True)
                right_shard_7.setAutoDraw(True)
                right_shard_8.setAutoDraw(True)
                right_shard_9.setAutoDraw(True)
                right_shard_10.setAutoDraw(True)

            instr_back_txt.text = 'Press LEFT ARROW to go back.\nPress RIGHT ARROW to continue.'
            if 'right' in instr_keys:
                for swatch_index in range(len(color_scale_1)):
                    swatches[swatch_index].setAutoDraw(False)
                left_chest.setAutoDraw(False)
                left_shard.setAutoDraw(False)
                left_shard_6.setAutoDraw(False)
                left_shard_7.setAutoDraw(False)
                left_shard_8.setAutoDraw(False)
                left_shard_9.setAutoDraw(False)
                left_shard_10.setAutoDraw(False)

                right_chest.setAutoDraw(False)
                right_shard.setAutoDraw(False)
                right_shard_6.setAutoDraw(False)
                right_shard_7.setAutoDraw(False)
                right_shard_8.setAutoDraw(False)
                right_shard_9.setAutoDraw(False)
                right_shard_10.setAutoDraw(False)

                social_image.setAutoDraw(False)
                food_image.setAutoDraw(False)
                drug_image.setAutoDraw(False)

                instr_keyboard.clearEvents()
                curr_instr += 1
                instr_disp_txt.text = instr_strs[curr_instr]
                instr_back_txt.autoDraw = True
        #        win.flip()
            elif 'left' in instr_keys:
                for swatch_index in range(len(color_scale_1)):
                    swatches[swatch_index].setAutoDraw(False)
                left_chest.setAutoDraw(False)
                left_shard.setAutoDraw(False)
                left_shard_6.setAutoDraw(False)
                left_shard_7.setAutoDraw(False)
                left_shard_8.setAutoDraw(False)
                left_shard_9.setAutoDraw(False)
                left_shard_10.setAutoDraw(False)

                right_chest.setAutoDraw(False)
                right_shard.setAutoDraw(False)
                right_shard_6.setAutoDraw(False)
                right_shard_7.setAutoDraw(False)
                right_shard_8.setAutoDraw(False)
                right_shard_9.setAutoDraw(False)
                right_shard_10.setAutoDraw(False)

                social_image.setAutoDraw(False)
                food_image.setAutoDraw(False)
                drug_image.setAutoDraw(False)

                instr_keyboard.clearEvents()
                curr_instr -= 1
                instr_disp_txt.text = instr_strs[curr_instr]

                # if prev instr == 0, then remove left arrow as option
                if curr_instr == 0:
                    instr_back_txt.text = '\nPress RIGHT ARROW to continue.'
                else:
                    instr_back_txt.text = 'Press LEFT ARROW to go back.\nPress RIGHT ARROW to continue.'

        #        win.flip()
      End Routine:
        instr_back_txt.autoDraw = False
        instr_disp_txt.autoDraw = False
    KeyboardComponent instr_2_resp
      allowedKeys = 'left','right'
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      store = nothing
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
  Routine practice_choice
    CodeComponent draw_chests_2
      Code Type = Auto->JS
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      Begin Experiment:
        left_chest = visual.ImageStim(
            win=win,
            name='left_chest',
            image='stimuli/chest.png', mask=None, anchor='center',
            ori=0.0, pos=(-.375, 0), size=(1, 1),
            color=[1,1,1], colorSpace='rgb', opacity=None,
            flipHoriz=False, flipVert=False,
            texRes=128.0, interpolate=False, depth=-1.0)
        right_chest = visual.ImageStim(
            win=win,
            name='right_chest',
            image='stimuli/chest.png', mask=None, anchor='center',
            ori=0.0, pos=(.375, 0), size=(1, 1),
            color=[1,1,1], colorSpace='rgb', opacity=None,
            flipHoriz=True, flipVert=False,
            texRes=128.0, interpolate=False, depth=-2.0)
      Begin Routine:
        left_chest.setAutoDraw(True)
        right_chest.setAutoDraw(True)
    CodeComponent set_shards_2
      Code Type = Auto->JS
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      Begin Routine:
        def reverse_value(num):
            if num == 1:
                return 9
            elif num == 2:
                return 8
            elif num == 3:
                return 7
            elif num == 4:
                return 6
            elif num == 5:
                return 5
            elif num == 6:
                return 4
            elif num == 7:
                return 3
            elif num == 8:
                return 2
            elif num == 9:
                return 1

        print('counter_balance', counter_balance)
        print('chest_order', chest_order)
        print('left_shard_shapes', left_shard_shapes)
        print('right_shard_shapes', right_shard_shapes)

        left_shard_colors = []
        right_shard_colors = []
        if chest_order[0] == 'Box1':
            print('box1')
            if counter_balance == '1':
                print('cb1')
                left_shard_sum = str(Box1_Sum)
                right_shard_sum = str(Box2_Sum)

                left_shard_colors = [Box1_val1,Box1_val2,Box1_val3,
                                     Box1_val4,Box1_val5,Box1_val6]
                right_shard_colors = [Box2_val1,Box2_val2,Box2_val3,
                                      Box2_val4,Box2_val5,Box2_val6]

            elif counter_balance == '2':
                print('cb2')
                left_shard_sum = str(Box1_Sum)
                right_shard_sum = str(Box2_Sum)

                left_shard_colors = [reverse_value(Box1_val1),reverse_value(Box1_val2),reverse_value(Box1_val3),
                                     reverse_value(Box1_val4),reverse_value(Box1_val5),reverse_value(Box1_val6)]
                right_shard_colors = [reverse_value(Box2_val1),reverse_value(Box2_val2),reverse_value(Box2_val3),
                                      reverse_value(Box2_val4),reverse_value(Box2_val5),reverse_value(Box2_val6)]

        elif chest_order[0] == 'Box2':
            print('box2')
            if counter_balance == '1':
                print('cb1')
                left_shard_sum = str(Box2_Sum)
                right_shard_sum = str(Box1_Sum)
                left_shard_colors = [Box2_val1,Box2_val2,Box2_val3,
                                      Box2_val4,Box2_val5,Box2_val6]
                right_shard_colors = [Box1_val1,Box1_val2,Box1_val3,
                                      Box1_val4,Box1_val5,Box1_val6]

            elif counter_balance == '2':
                print('cb2')
                left_shard_sum = str(Box2_Sum)
                right_shard_sum = str(Box1_Sum)

                left_shard_colors = [reverse_value(Box2_val1),reverse_value(Box2_val2),reverse_value(Box2_val3),
                                      reverse_value(Box2_val4),reverse_value(Box2_val5),reverse_value(Box2_val6)]
                right_shard_colors = [reverse_value(Box1_val1),reverse_value(Box1_val2),reverse_value(Box1_val3),
                                     reverse_value(Box1_val4),reverse_value(Box1_val5),reverse_value(Box1_val6)]

        print(left_shard_colors, 'left_shard_colors')
        print(right_shard_colors, 'right_shard_colors')

        left_shards = []
        right_shards = []
        for i in range(6):
            ## THIS PART CONVERTS TO JS USING [].PUSH
            if left_shard_shapes[i] >= 10:
                left_shards.append('stimuli/'+color_1+'/shard-' + str(left_shard_shapes[i]) + '_color-' + str(left_shard_colors[i]) + '.png')
            else:
                left_shards.append('stimuli/'+color_1+'/shard-0' + str(left_shard_shapes[i]) + '_color-' + str(left_shard_colors[i]) + '.png')

            ## THIS PART CONVERTS TO JS USING [].PUSH
            if right_shard_shapes[i] >= 10:
                right_shards.append('stimuli/'+color_1+'/shard-' + str(right_shard_shapes[i]) + '_color-' + str(right_shard_colors[i]) + '.png')
            else:
                right_shards.append('stimuli/'+color_1+'/shard-0' + str(right_shard_shapes[i]) + '_color-' + str(right_shard_colors[i]) + '.png')

        ## determine better option
        if float(left_shard_sum) > float(right_shard_sum):
            better_option = 'left'
        elif float(left_shard_sum) < float(right_shard_sum):
            better_option = 'right'

        thisExp.addData('better_option', better_option)

        print('chest_order', chest_order)
    CodeComponent outline_settings_2
      Code Type = Auto->JS
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      End Routine:
        print(chest_order)
        if choice_resp_2.keys == 'f': #left
            made_choice = 1
            this_trial_choice = 'left'
            this_trial_box_choice = chest_order[0]
            if better_option == 'left':
                correct = 1
            else:
                correct = 0
        elif choice_resp_2.keys == 'j': #right
            made_choice = 1
            this_trial_choice = 'right'
            this_trial_box_choice = chest_order[1]
            if better_option == 'right':
                correct = 1
            else:
                correct = 0

        thisExp.addData('agent_choice', this_trial_choice)
        thisExp.addData('agent_box_choice', this_trial_box_choice)
        thisExp.addData('correct_choice', correct)
        correct_choice_count.append(correct)
    KeyboardComponent choice_resp_2
      allowedKeys = 'f','j'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
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    CodeComponent def_randchoice
      Code Type = Both
      disabled = True
      Begin Experiment:
        import random

        def random_choices(k):
            return random.choices(k, k=6)
Flow
  Routine start_exp
  Routine instr_1
  LoopInitiator skip_food loopType="TrialHandler"
    loopType = sequential
    nReps = FOOD_BOOL * RATE_BOOL
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    Routine start_food_ratings
    LoopInitiator food_rating_loop loopType="TrialHandler"
      conditionsFile = finalfooditems.xlsx
      loopType = random
      nReps = 1
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      conditions:
        [{'foodItem': '1%milk.jpg', 'path': 'stimuli/food/', 'image': 'stimuli/food/1%milk.jpg'},
        {'foodItem': 'air popcorn.jpg', 'path': 'stimuli/food/', 'image': 'stimuli/food/air popcorn.jpg'},
        {'foodItem': 'american cheese.jpg', 'path': 'stimuli/food/', 'image': 'stimuli/food/american cheese.jpg'},
        {'foodItem': 'apple slices.jpg', 'path': 'stimuli/food/', 'image': 'stimuli/food/apple slices.jpg'},
        {'foodItem': 'avacado.jpg', 'path': 'stimuli/food/', 'image': 'stimuli/food/avacado.jpg'},
        {'foodItem': 'baby cheese.jpg', 'path': 'stimuli/food/', 'image': 'stimuli/food/baby cheese.jpg'},
        {'foodItem': 'bagel and cc.jpg', 'path': 'stimuli/food/', 'image': 'stimuli/food/bagel and cc.jpg'},
        {'foodItem': 'bagel plain.jpg', 'path': 'stimuli/food/', 'image': 'stimuli/food/bagel plain.jpg'},
        {'foodItem': 'baguette oil.jpg', 'path': 'stimuli/food/', 'image': 'stimuli/food/baguette oil.jpg'},
        {'foodItem': 'baked potato.jpg', 'path': 'stimuli/food/', 'image': 'stimuli/food/baked potato.jpg'},
        {'foodItem': 'banana.jpg', 'path': 'stimuli/food/', 'image': 'stimuli/food/banana.jpg'},
        {'foodItem': 'broccoli cauliflower.jpg', 'path': 'stimuli/food/', 'image': 'stimuli/food/broccoli cauliflower.jpg'},
        {'foodItem': 'brownie.jpg', 'path': 'stimuli/food/', 'image': 'stimuli/food/brownie.jpg'},
        {'foodItem': 'burger.jpg', 'path': 'stimuli/food/', 'image': 'stimuli/food/burger.jpg'},
        {'foodItem': 'celery and carrot sticks.jpg', 'path': 'stimuli/food/', 'image': 'stimuli/food/celery and carrot sticks.jpg'}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
      Routine rateFood
      Routine fixation_500ms
    LoopTerminator food_rating_loop
    Routine sort_food
  LoopTerminator skip_food
  LoopInitiator choose_food_loop loopType="TrialHandler"
    conditionsFile = foodChoiceTrials.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'whichItem': 'HV1'},
      {'whichItem': 'HV2'},
      {'whichItem': 'HV3'},
      {'whichItem': 'MV1'},
      {'whichItem': 'MV2'},
      {'whichItem': 'MV3'},
      {'whichItem': 'LV1'},
      {'whichItem': 'LV2'},
      {'whichItem': 'LV3'}]
    Routine choose_food
  LoopTerminator choose_food_loop
  Routine hide_mouse_routine
  Routine instr_2
  LoopInitiator skip_practice loopType="TrialHandler"
    isTrials = False
    loopType = sequential
    nReps = PRACTICE_BOOL
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    Routine prac_instr
    LoopInitiator practice loopType="TrialHandler"
      conditionsFile = practice.csv
      loopType = random
      nReps = 1
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      conditions:
        [OrderedDict([('Box1_val1', 1), ('Box1_val2', 1), ('Box1_val3', 1), ('Box1_val4', 1), ('Box1_val5', 3), ('Box1_val6', 4), ('Box2_ID', 2521), ('Box2_val1', 1), ('Box2_val2', 1), ('Box2_val3', 3), ('Box2_val4', 4), ('Box2_val5', 4), ('Box2_val6', 4), ('Box1_Sum', 11), ('Box2_Sum', 17), ('valDif', -6), ('Val_Cat', 1), ('trial_ID', 1), ('Box1_Variance', 3), ('Box2_Variance', 3), ('varDif', 0)]),
        OrderedDict([('Box1_val1', 1), ('Box1_val2', 1), ('Box1_val3', 1), ('Box1_val4', 2), ('Box1_val5', 4), ('Box1_val6', 2), ('Box2_ID', 2525), ('Box2_val1', 1), ('Box2_val2', 2), ('Box2_val3', 2), ('Box2_val4', 4), ('Box2_val5', 4), ('Box2_val6', 4), ('Box1_Sum', 11), ('Box2_Sum', 17), ('valDif', -6), ('Val_Cat', 1), ('trial_ID', 2), ('Box1_Variance', 3), ('Box2_Variance', 3), ('varDif', 0)]),
        OrderedDict([('Box1_val1', 1), ('Box1_val2', 1), ('Box1_val3', 1), ('Box1_val4', 4), ('Box1_val5', 1), ('Box1_val6', 3), ('Box2_ID', 2530), ('Box2_val1', 1), ('Box2_val2', 2), ('Box2_val3', 4), ('Box2_val4', 3), ('Box2_val5', 3), ('Box2_val6', 4), ('Box1_Sum', 11), ('Box2_Sum', 17), ('valDif', -6), ('Val_Cat', 1), ('trial_ID', 3), ('Box1_Variance', 3), ('Box2_Variance', 4), ('varDif', -1)]),
        OrderedDict([('Box1_val1', 1), ('Box1_val2', 1), ('Box1_val3', 2), ('Box1_val4', 1), ('Box1_val5', 4), ('Box1_val6', 2), ('Box2_ID', 2535), ('Box2_val1', 1), ('Box2_val2', 3), ('Box2_val3', 1), ('Box2_val4', 4), ('Box2_val5', 4), ('Box2_val6', 4), ('Box1_Sum', 11), ('Box2_Sum', 17), ('valDif', -6), ('Val_Cat', 1), ('trial_ID', 4), ('Box1_Variance', 3), ('Box2_Variance', 3), ('varDif', 0)])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
      Routine practice_choice
      Routine fixation_500ms
    LoopTerminator practice
  LoopTerminator skip_practice
  Routine self_instr
  LoopInitiator self_trials loopType="TrialHandler"
    conditionsFile = trials.csv
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('TrialN', 1), ('Box1_ID', 1), ('Box1_val1', 1), ('Box1_val2', 3), ('Box1_val3', 4), ('Box1_val4', 1), ('Box1_val5', 2), ('Box1_val6', 3), ('Box2_ID', 2), ('Box2_val1', 2), ('Box2_val2', 2), ('Box2_val3', 4), ('Box2_val4', 2), ('Box2_val5', 4), ('Box2_val6', 3), ('Box1_Sum', 14), ('Box2_Sum', 17), ('valDif', -3), ('Val_Cat', 1), ('trial_ID', 1), ('Box1_Variance', 4), ('Box2_Variance', 3), ('varDif', 1), ('Val_Sum', 31), ('Design_Cell', 'L')]),
      OrderedDict([('TrialN', 2), ('Box1_ID', 3), ('Box1_val1', 4), ('Box1_val2', 4), ('Box1_val3', 1), ('Box1_val4', 2), ('Box1_val5', 4), ('Box1_val6', 2), ('Box2_ID', 4), ('Box2_val1', 4), ('Box2_val2', 3), ('Box2_val3', 4), ('Box2_val4', 1), ('Box2_val5', 2), ('Box2_val6', 4), ('Box1_Sum', 17), ('Box2_Sum', 18), ('valDif', -1), ('Val_Cat', 1), ('trial_ID', 1), ('Box1_Variance', 3), ('Box2_Variance', 4), ('varDif', -1), ('Val_Sum', 35), ('Design_Cell', 'L')]),
      OrderedDict([('TrialN', 3), ('Box1_ID', 5), ('Box1_val1', 2), ('Box1_val2', 2), ('Box1_val3', 3), ('Box1_val4', 1), ('Box1_val5', 4), ('Box1_val6', 3), ('Box2_ID', 6), ('Box2_val1', 2), ('Box2_val2', 3), ('Box2_val3', 4), ('Box2_val4', 2), ('Box2_val5', 1), ('Box2_val6', 2), ('Box1_Sum', 15), ('Box2_Sum', 14), ('valDif', 1), ('Val_Cat', 1), ('trial_ID', 1), ('Box1_Variance', 4), ('Box2_Variance', 4), ('varDif', 0), ('Val_Sum', 29), ('Design_Cell', 'L')]),
      OrderedDict([('TrialN', 4), ('Box1_ID', 7), ('Box1_val1', 3), ('Box1_val2', 4), ('Box1_val3', 3), ('Box1_val4', 3), ('Box1_val5', 4), ('Box1_val6', 2), ('Box2_ID', 8), ('Box2_val1', 3), ('Box2_val2', 2), ('Box2_val3', 1), ('Box2_val4', 2), ('Box2_val5', 4), ('Box2_val6', 4), ('Box1_Sum', 19), ('Box2_Sum', 16), ('valDif', 3), ('Val_Cat', 1), ('trial_ID', 1), ('Box1_Variance', 3), ('Box2_Variance', 4), ('varDif', -1), ('Val_Sum', 35), ('Design_Cell', 'L')])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
    Routine choice
    Routine fixation_500ms
  LoopTerminator self_trials
  Routine colorblindness
  Routine ender
  LoopInitiator bonus_disp loopType="TrialHandler"
    isTrials = False
    loopType = sequential
    nReps = BONUS_BOOL
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    Routine reward
  LoopTerminator bonus_disp
