PsychoPy2experiment version="2022.2.5"
Settings
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = untitled
  keyboardBackend = ioHub
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Routines
  Routine start_exp
    CodeComponent code_JS
      Code Type = JS
      Begin JS Experiment:
        thisExp=psychoJS.experiment;
        win=psychoJS.window;
        event=psychoJS.eventManager;
        //random = Math.random;
        shuffle = util.shuffle;
        Array.prototype.append = [].push;

        util.addInfoFromUrl(expInfo);
    CodeComponent hide_mouse
      Code Type = Both
      Begin JS Routine:
        //document.body.style.cursor='none';
      Begin Routine:
        myMouse = event.Mouse()
        myMouse.setPos(newPos=(1,1))

        win.mouseVisible = False
      End Experiment:
        win.mouseVisible = True
      End JS Experiment:
        //document.body.style.cursor='auto';
    CodeComponent set_shard_pos
      Code Type = Auto->JS
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      Begin Experiment:
        all_shards_size = (.12, .12)
        left_shards_pos = [[-.505, .085], [-.375, .085], [-.245, .085],
                           [-.505, -.045], [-.375, -.045], [-.245, -.045]]
        right_shards_pos = [[.505, .085], [.375, .085], [.245, .085],
                           [.505, -.045], [.375, -.045], [.245, -.045]]
    CodeComponent check_bonus
      Code Type = Auto->JS
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      Begin Experiment:
        if expInfo['extra'] == '1':
            BONUS_BOOL = 1
        elif expInfo['extra'] == '0':
            BONUS_BOOL = 0
    CodeComponent reverse_opt
      Code Type = Auto->JS
      disabled = True
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      Begin Experiment:
        def reverse_value(num):
            if num == 1:
                return 12
            elif num == 2:
                return 11
            elif num == 3:
                return 10
            elif num == 4:
                return 9
            elif num == 5:
                return 8
            elif num == 6:
                return 7
            elif num == 7:
                return 6
            elif num == 8:
                return 5
            elif num == 9:
                return 4
            elif num == 10:
                return 3
            elif num == 11:
                return 2
            elif num == 12:
                return 1
    CodeComponent check_practice
      Code Type = Both
      Begin Experiment:
        from random import shuffle
      Begin JS Routine:
        if ((expInfo["practice"] === "1")) {
            PRACTICE_BOOL = 1;
        } else {
            if ((expInfo["practice"] === "0")) {
                PRACTICE_BOOL = 0;
            }
        }
      Begin Routine:
        if expInfo['practice'] == '1':
            PRACTICE_BOOL = 1
        elif expInfo['practice'] == '0':
            PRACTICE_BOOL = 0
    CodeComponent id_grab
      Code Type = Both
      Before Experiment:
        subID = ''
      Before JS Experiment:
        var subID;
        const queryString = window.location.search;
        const urlParams = new URLSearchParams(queryString);
        subID = urlParams.get('participant'); //make sure this parameter is same as how you defined it in Prolific (aka case sensitive)
        expInfo['participant'] = subID;
        console.log(subID);
Flow
  Routine start_exp
